# Define the world
s:Ge/World/Material  = "Vacuum"
d:Ge/World/HLX       = 0.5 m
d:Ge/World/HLY       = 0.5 m
d:Ge/World/HLZ       = 0.5 m
s:Ge/World/Color = "yellow"
b:Ge/World/Invisible = "False"

# Define the Water Tank
s:Ge/WaterTank/Type	     = "TsBox"
s:Ge/WaterTank/Parent 	     = "World"
s:Ge/WaterTank/Material      = "G4_WATER"
s:Ge/WaterTank/Color	     = "aqua"
s:Ge/WaterTank/DrawingStyle  = "WireFrame" # Options are: "WireFrame", "Solid", "FullWireFrame"
b:Ge/WaterTank/Invisible    = "False"
dc:Ge/WaterTank/HLX 	     = 30 cm
dc:Ge/WaterTank/HLY 	     = 30 cm
dc:Ge/WaterTank/HLZ 	     = 30 cm
d:Ge/WaterTank/TransX	     = 0.0 cm
d:Ge/WaterTank/TransY	     = 0.0 cm
d:Ge/WaterTank/TransZ	     = 0.0 cm
d:Ge/WaterTank/RotX	     = 180.0 deg
d:Ge/WaterTank/RotY	     = 0.0 deg
d:Ge/WaterTank/RotZ	     = 0.0 deg
# i:Ge/WaterTank/XBins 	     = 600
# i:Ge/WaterTank/YBins 	     = 600
# i:Ge/WaterTank/ZBins 	     = 3000

sv:Ph/Default/Modules = 1 "g4em-standard_opt4"

# # Define the beam
# s:So/Beam1/Type                     = "Beam"
# s:So/Beam1/Component                = "BeamPosition"
# s:So/Beam1/BeamParticle             = "proton"
# dc:So/Beam1/BeamEnergy               = 200 MeV
# u:So/Beam1/BeamEnergySpread         = 0.757504
# s:So/Beam1/BeamPositionDistribution = "Gaussian"
# s:So/Beam1/BeamPositionCutoffShape  = "Ellipse"
# d:So/Beam1/BeamPositionCutoffX      = 10 cm   # X extent of position (if Flat or Gaussian)
# d:So/Beam1/BeamPositionCutoffY      = 10 cm   # Y extent of position (if Flat or Gaussian)
# d:So/Beam1/BeamPositionSpreadX      = 0.30 cm  # distribution (if Gaussian)
# d:So/Beam1/BeamPositionSpreadY      = 0.30 cm  # distribution (if Gaussian)
# s:So/Beam1/BeamAngularDistribution  = "None"
# d:So/Beam1/BeamAngularCutoffX       = 90. deg
# d:So/Beam1/BeamAngularCutoffY       = 90. deg
# d:So/Beam1/BeamAngularSpreadX       = 0.0 deg
# d:So/Beam1/BeamAngularSpreadY       = 0.0 deg
# ic:So/Beam1/NumberOfHistoriesInRun  = 5000
s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
sc:So/Example/BeamParticle             = "proton"
dc:So/Example/BeamEnergy               = 200.0 MeV
u:So/Example/BeamEnergySpread         = 0.757504
s:So/Example/BeamPositionDistribution = "Gaussian"
s:So/Example/BeamPositionCutoffShape  = "Ellipse"
d:So/Example/BeamPositionCutoffX      = 10. cm
d:So/Example/BeamPositionCutoffY      = 10. cm
d:So/Example/BeamPositionSpreadX      = 0.65 cm
d:So/Example/BeamPositionSpreadY      = 0.65 cm
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.0032 rad
d:So/Example/BeamAngularSpreadY       = 0.0032 rad
ic:So/Example/NumberOfHistoriesInRun   = 10000

s:Ge/BeamPosition/Parent = "World"
s:Ge/BeamPosition/Type   = "Group"
d:Ge/BeamPosition/TransX = 0. cm
d:Ge/BeamPosition/TransY = 0. cm
d:Ge/BeamPosition/TransZ = 0.5 m
d:Ge/BeamPosition/RotX   = 180. deg
d:Ge/BeamPosition/RotY   = 0. deg
d:Ge/BeamPosition/RotZ   = 0. deg


s:Sc/OriginCount_proton/Quantity                  = "OriginCount"
s:Sc/OriginCount_proton/Component = "WaterTank"
s:Sc/OriginCount_proton/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/OriginCount_proton/OnlyIncludeParticlesNamed = 1 "proton" 

s:Sc/OriginCount_neutron/Quantity                  = "OriginCount"
s:Sc/OriginCount_neutron/Component = "WaterTank"
s:Sc/OriginCount_neutron/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/OriginCount_neutron/OnlyIncludeParticlesNamed = 1 "neutron"

s:Sc/OriginCount_deuteron/Quantity                  = "OriginCount"
s:Sc/OriginCount_deuteron/Component = "WaterTank"
s:Sc/OriginCount_deuteron/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/OriginCount_deuteron/OnlyIncludeParticlesNamed = 1 "deuteron" 

s:Sc/OriginCount_triton/Quantity                  = "OriginCount"
s:Sc/OriginCount_triton/Component = "WaterTank"
s:Sc/OriginCount_triton/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/OriginCount_triton/OnlyIncludeParticlesNamed = 1 "triton" 

s:Sc/OriginCount_alpha/Quantity                  = "OriginCount"
s:Sc/OriginCount_alpha/Component = "WaterTank"
s:Sc/OriginCount_alpha/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/OriginCount_alpha/OnlyIncludeParticlesNamed = 1 "alpha" 


s:Sc/OriginCount_He3/Quantity                  = "OriginCount"
s:Sc/OriginCount_He3/Component = "WaterTank"
s:Sc/OriginCount_He3/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/OriginCount_He3/OnlyIncludeParticlesNamed = 1 "He3" 



s:Gr/ViewA/Type                             = "OpenGL"
i:Gr/ViewA/WindowSizeX                      = 900
i:Gr/ViewA/WindowSizeY                      = 900
b:Gr/ViewA/IncludeAxes      				= "True"
d:Gr/ViewA/Theta                            = 55 deg
d:Gr/ViewA/Phi                              = 20 deg
s:Gr/ViewA/Projection                       = "Perspective"
d:Gr/ViewA/PerspectiveAngle                 = 30 deg
u:Gr/ViewA/Zoom                             = 1.3
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"



# Core-count
i:Ts/NumberOfThreads = 7


