s:Ge/World/Material  = "Vacuum"
d:Ge/World/HLX       = 1.5 m
d:Ge/World/HLY       = 1.5 m
d:Ge/World/HLZ       = 1.5 m
b:Ge/World/Invisible = "True"

s:Ge/WaterTank/Type      = "TsBox"
s:Ge/WaterTank/Parent    = "World"
sc:Ge/WaterTank/Material = "G4_WATER"
dc:Ge/WaterTank/HLX      = 30.0 cm
dc:Ge/WaterTank/HLY      = 30.0 cm
dc:Ge/WaterTank/HLZ      = 30.0 cm
dc:Ge/WaterTank/TransZ   = 0. cm
s:Ge/WaterTank/Color     = "blue"

s:Ge/block/Type     		   = "TsCylinder"
s:Ge/block/Parent   		   = "World"
sc:Ge/block/Material 	   = "Brass"
dc:Ge/block/RMin     = 0. cm
dc:Ge/block/RMax     = 4.35 cm
dc:Ge/block/HL       = 1.625 cm
dc:Ge/block/SPhi     = 0. deg
dc:Ge/block/DPhi     = 360. deg
dc:Ge/block/TransZ   		   = 50. cm



s:Sc/CountNeutron/Quantity = "OriginCount"
s:Sc/CountNeutron/Component = "WaterTank"
b:Sc/CountNeutron/OutputToConsole = "True"
s:Sc/CountNeutron/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/CountNeutron/OnlyIncludeParticlesNamed = 1 "neutron"

s:Sc/CountElectron/Quantity = "OriginCount"
s:Sc/CountElectron/Component = "WaterTank"
b:Sc/CountElectron/OutputToConsole = "True"
s:Sc/CountElectron/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/CountElectron/OnlyIncludeParticlesNamed = 1 "e-"

s:Sc/CountGamma/Quantity = "OriginCount"
s:Sc/CountGamma/Component = "WaterTank"
b:Sc/CountGamma/OutputToConsole = "True"
s:Sc/CountGamma/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/CountGamma/OnlyIncludeParticlesNamed = 1 "gamma"



s:Sc/DoseAtPhantom/Quantity                  = "DoseToMedium"
sc:Sc/DoseAtPhantom/Component                = "WaterTank"
ic:Sc/DoseAtPhantom/ZBins 					 = 60
b:Sc/DoseAtPhantom/OutputToConsole           = "TRUE"
s:Sc/DoseAtPhantom/IfOutputFileAlreadyExists = "Overwrite"



s:Gr/ViewA/Type                             = "OpenGL"
i:Gr/ViewA/WindowSizeX                      = 900
i:Gr/ViewA/WindowSizeY                      = 900
b:Gr/ViewA/IncludeAxes      				= "True"
d:Gr/ViewA/Theta                            = 55 deg
d:Gr/ViewA/Phi                              = 20 deg
s:Gr/ViewA/Projection                       = "Perspective"
d:Gr/ViewA/PerspectiveAngle                 = 30 deg
u:Gr/ViewA/Zoom                             = 1.3
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"

sv:Ph/Default/Modules = 1 "g4em-standard_opt4"

s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
sc:So/Example/BeamParticle             = "proton"
dc:So/Example/BeamEnergy               = 200.0 MeV
u:So/Example/BeamEnergySpread         = 0.757504
s:So/Example/BeamPositionDistribution = "Gaussian"
s:So/Example/BeamPositionCutoffShape  = "Ellipse"
d:So/Example/BeamPositionCutoffX      = 10. cm
d:So/Example/BeamPositionCutoffY      = 10. cm
d:So/Example/BeamPositionSpreadX      = 0.65 cm
d:So/Example/BeamPositionSpreadY      = 0.65 cm
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.0032 rad
d:So/Example/BeamAngularSpreadY       = 0.0032 rad
ic:So/Example/NumberOfHistoriesInRun   = 5000

i:Ts/ShowHistoryCountAtInterval = 20
i:Ts/NumberOfThreads = 7

#b:Ts/PauseBeforeQuit = "True"